nchannels_in = 1
fragsize = 64
srate = 44100
mhalib = mhachain
mha.algos = [libchapro-openmha-plugin] 
mha.libchapro-openmha-plugin.cross_freq = [317 503 798 1265 2006 3181 5045]
mha.libchapro-openmha-plugin.cr = [1.1 1.1 1.2 1.1 1.5 1.6 1.6 2.1]
mha.libchapro-openmha-plugin.tk = [32 32 37 29 38 39 35 39]
mha.libchapro-openmha-plugin.tkgain = [2 2 10 2 27 36 34 49]
mha.libchapro-openmha-plugin.bolt = [100 100 100 100 100 100 100 100]
mha.libchapro-openmha-plugin.attack = 5
mha.libchapro-openmha-plugin.release = 50
mha.libchapro-openmha-plugin.maxdB = 119
mha.libchapro-openmha-plugin.nw = 256
iolib = MHAIOJackdb
io.con_in = [system:capture_1]
io.con_out = [system:playback_1]



